 <PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Ultrasound transverse process enhancer"
      Description="Enhances bone surfaces in ultrasound images"/>
      
    <Device
      Id="VideoDevice"
      Type="SonixVideo"
      AcquisitionRate="30"
      LocalTimeOffsetSec="0.0"
      IP="130.15.7.20"
      AutoClipEnabled="TRUE"
      ImagingMode="BMode"
      ImageGeometryOutputEnabled="FALSE">
      <DataSources>
        <DataSource
		  Type="Video"
		  Id="Video"
		  PortName="B"
		  BufferSize="200"
		  AveragedItemsForFiltering="20"
		  PortUsImageOrientation="UF"
		  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
      
    <Device
      Id="BoneEnhancer"
      Type="ImageProcessor" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedBoneVideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
      <Processor Type="vtkPlusTransverseProcessEnhancer" NumberOfScanLines="200" NumberOfSamplesPerScanLine="210">
          <ScanConversion 
            TransducerName="Ultrasonix_C5-2"
            TransducerGeometry="CURVILINEAR"
            RadiusStartMm="50.0"
            RadiusStopMm="120.0"
            ThetaStartDeg="-24"
            ThetaStopDeg="24"
            OutputImageSizePixel="820 616"
            TransducerCenterPixel="410 110"
            OutputImageSpacingMmPerPixel="0.1526 0.1526"
            NumberOfSamplesPerScanLine="210"/>
          <ImageProcessingOperations
            ConvertToLinesImage="True"          
            ThresholdingEnabled="True"
            GaussianEnabled="True"
            EdgeDetectorEnabled="True"
            IslandRemovalEnabled="True"
            ErosionEnabled="True"
            DilationEnabled="True"
            ReconvertBinaryToGreyscale="True"
            ReturnToFanImage="True">
            <GaussianSmoothing GaussianStdDev="3" GaussianKernelSize="5"/>
            <Thresholding ThresholdOutValue="0" LowerThreshold="30" UpperThreshold="255"/>
            <IslandRemoval IslandAreaThreshold="700"/>
            <Erosion ErosionKernelSize="5 5"/>
            <Dilation DilationKernelSize="15 5"/>
          </ImageProcessingOperations>
      </Processor>
    </Device>
  </DataCollection>
  
  <PlusOpenIGTLinkServerxxx 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="250" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackedBoneVideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
      <xTransform Name="ProbeToTracker" />
      </TransformNames>
    <ImageNames>
      <Image Name="Image" EmbeddedTransformToFrame="Image" />
    </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServerxxx>

  <!-- Enable this Server's port in Slicer to see the input image along with the processed image -->
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="250" 
    ListeningPort="18945" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
      <xTransform Name="ProbeToTracker" />
      </TransformNames>
    <ImageNames>
      <Image Name="Image" EmbeddedTransformToFrame="Image" />
    </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer> 

</PlusConfiguration>