 <PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Ultrasound transverse process enhancer input connection"
      Description="Obtains and transmits ultrasound images"/>
	  
    <Device
      Id="TrackedVideoDevice"
      Type="SonixVideo" 
      AcquisitionRate="30"
      AutoClipEnabled="TRUE"
      ImageGeometryOutputEnabled="TRUE"
      ImageToTransducerTransformName="ImageToTransducer"
      IP="130.15.7.20" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortName="B" PortUsImageOrientation="UN"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>

  </DataCollection>
  
    
  <!-- Enable this Server's port in Slicer to see the input image along with the processed image -->
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18945" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Transducer" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>